---
API: 2.1
OpenSesame: 3.3.9
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "My Experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:\\Documents\\Uni Kurse\\Bachelorarbeit\\Experiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define form_multiple_choice LanguageChoice
	set timeout infinite
	set spacing 10
	__question__
	Wählen Sie die Sprache
	Επιλέξτε την γλώσσα
	__end__
	__options__
	Deutsch
	Ελληνικά
	__end__
	set margins "50;50;50;50"
	set form_var language
	set form_title "Language Choice"
	set description "A simple multiple choice item"
	set button_text "Weiter/Συνέχεια"
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define inline_javascript convert_answers_to_english
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//Choose the correct map
	if (vars.language === 'de'){
	    let m = german_to_english;
	} else if (vars.language == 'gr'){
	    let m = greek_to_english;
	}
	//Update the variables
	vars.user_nationality = m.get(vars.user_nationality);
	vars.mother_tongue = m.get(vars.mother_tongue);
	vars.homeland = m.get(vars.homeland);
	__end__
	___prepare__
	let german_to_english = new Map();
	german_to_english.set(0, 'de');
	german_to_english.set(1, 'gr');
	german_to_english.set(2,'other');
	german_to_english.set(3,'multiple');
	
	let greek_to_english = new Map();
	greek_to_english.set(0, 'gr');
	greek_to_english.set(1, 'de');
	greek_to_english.set(2,'other');
	greek_to_english.set(3,'multiple');
	
	// german_to_english = {
	//     0 : 'de',
	//     1 : 'gr',
	//     2 : 'other',
	//     3 :'multiple',
	//     null : 'N/A',
	//     undefined : 'N/A'
	//     }
	// greek_to_english = {
	//     0 : 'gr', 
	//     1 : 'de',
	//     2 : 'other',
	//     3 : 'multiple',
	//     null : 'N/A',
	//     undefined : 'N/A'
	//     }
	__end__

define inline_script convert_answers_to_english_python
	set description "Executes Python code"
	___run__
	toTranslate = [var.user_nationality,var.mother_tongue,var.homeland]
	dictionary = dictionaries[var.language]
	
	var.user_nationality = dictionary[var.user_nationality]
	var.mother_tongue = dictionary[var.mother_tongue]
	var.homeland = dictionary[var.homeland]
	__end__
	___prepare__
	# german_to_english = {
	#     'Deutsch' : 'de',
	#     'Griechisch' : 'gr',
	#     'Andere':'other',
	#     'Mehrere':'multiple',
	#     'Deutschland' : 'de',
	#     'Griechenland' : 'gr'
	#     }
	german_to_english = {
	    0 : 'de',
	    1 : 'gr',
	    2 : 'other',
	    3 :'multiple',
	    None : 'N/A'
	    }
	greek_to_english = {
	    0 : 'gr', 
	    1 : 'de',
	    2 : 'other',
	    3 : 'multiple',
	    None : 'N/A'
	    }
	
	# greek_to_english = {
	#     'Ελληνική': 'gr', 
	#     'Γερμανική': 'de',
	#     'Άλλη' : 'other',
	#     'Περισσότερες απο μία' : 'multiple',
	#     'Ελληνικά':'gr',
	#     'Γερμανικά' : 'de',
	#     'Ελλάδα':'gr', 
	#     'Γερμανία' : 'de'
	#     }
	
	dictionaries = {'de':german_to_english,'gr':greek_to_english}
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run LanguageChoice always
	run process_language_variables always
	run german_experiment "[language] = de"
	run greek_experiment "[language] = gr"

define loop experiment_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cloud_visibility yesclouds
	setcycle 0 environment beach
	setcycle 0 sun_visibility visiblesun
	setcycle 1 cloud_visibility noclouds
	setcycle 1 environment beach
	setcycle 1 sun_visibility visiblesun
	setcycle 2 cloud_visibility yesclouds
	setcycle 2 environment landscape
	setcycle 2 sun_visibility visiblesun
	setcycle 3 cloud_visibility noclouds
	setcycle 3 environment landscape
	setcycle 3 sun_visibility visiblesun
	setcycle 4 cloud_visibility yesclouds
	setcycle 4 environment beach
	setcycle 4 sun_visibility invisiblesun
	setcycle 5 cloud_visibility noclouds
	setcycle 5 environment beach
	setcycle 5 sun_visibility invisiblesun
	setcycle 6 cloud_visibility yesclouds
	setcycle 6 environment landscape
	setcycle 6 sun_visibility invisiblesun
	setcycle 7 cloud_visibility noclouds
	setcycle 7 environment landscape
	setcycle 7 sun_visibility invisiblesun
	run trial_sequence

define feedback feedback_german
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Ende des Experiments. Vielen Dank für Ihre Teilnahme!<br /><br />Drücken Sie irgendeinen Knopf." x=0 y=0 z_index=0

define feedback feedback_greek
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Τέλος του πειράματος. Σας ευχαριστώ πολύ για τη συμμετοχή!<br /><br />Πατήστε οποιοδήποτε κουμπί." x=0 y=0 z_index=0

define sequence german_experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome_screen_german always
	run nationality_form_german always
	run mother_tongue_form_german always
	run homeland_form_german always
	run instructions_german always
	run convert_answers_to_english always
	run experiment_loop always
	run feedback_german always

define sequence greek_experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run welcome_screen_greek always
	run instructions_greek always
	run convert_answers_to_english always
	run experiment_loop always
	run feedback_greek always

define form_multiple_choice homeland_form_german
	set timeout infinite
	set spacing 10
	set question "In welchem Land sind Sie aufgewachsen?"
	__options__
	Deutschland
	Griechenland
	Andere
	Mehrere
	__end__
	set margins "50;50;50;50"
	set form_var homeland
	set form_title Heimatland
	set description "A simple multiple choice item"
	set button_text Weiter
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define inline_script image_with_rating_scale
	set description "Executes Python code"
	___run__
	labelQuestion = Label(
	    # text=u'How strongly does the image motivate you to travel there?',
	    text=var.trialQuestion,
	    center=False
	)
	
	# Add the widgets to the form. The position in the form is indicated as a
	# (column, row) tuple.
	
	form.set_widget(labelQuestion, (0,1), colspan=10)
	# Execute the form! In this case, the form will return the text of the button that
	# was clicked. This is one way to get a return value out of the form. Another way
	# is to use the 'var' keyword, supported some of the widgets.
	button_clicked = form._exec()
	__end__
	___prepare__
	from libopensesame import widgets
	# The full path to the image needs to be provided.
	# self.experiment.pool can be used to retrieve the full path
	# to an image in the file pool.
	imName = f"{var.environment}_{var.sun_visibility}_{var.cloud_visibility}.jpg"
	var.imageName = imName #Logging purposes
	# Create a form
	form = Form(
	    cols=[1,1,1,1,1,1,1,1,1,1], rows=[9,0.5,1],
	    margins=(5,10,5,10), spacing=5
	)
	image = widgets.image(form, path=pool[imName])
	# Create the button widgets
	button1 = Button(text=u'1')
	button2 = Button(text=u'2')
	button3 = Button(text=u'3')
	button4 = Button(text=u'4')
	button5 = Button(text=u'5')
	button6 = Button(text=u'6')
	button7 = Button(text=u'7')
	button8 = Button(text=u'8')
	button9 = Button(text=u'9')
	button10 = Button(text=u'10')
	
	form.set_widget(image, (0,0), colspan=10)
	form.set_widget(button1, (0,2))
	form.set_widget(button2, (1,2))
	form.set_widget(button3, (2,2))
	form.set_widget(button4, (3,2))
	form.set_widget(button5, (4,2))
	form.set_widget(button6, (5,2))
	form.set_widget(button7, (6,2))
	form.set_widget(button8, (7,2))
	form.set_widget(button9, (8,2))
	form.set_widget(button10, (9,2))
	__end__

define inline_script input_form_german
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = Form(
	    cols=[1], rows=[1,1,4,1,3,1,3,1],
	    margins=(5,10,5,10), spacing=5
	)
	textLabel = widgets.label(form, text='Bitte kreuzen Sie zutreffendes an.')
	
	nationalityLabel = widgets.label(form, text='Welche Nationalität haben Sie?')
	nationalityScale = widgets.rating_scale(form, nodes=['Deutsch', "Griechisch",
	        'Andere', 'Mehrere'], var='user_nationality',orientation='vertical')
	
	motherTongueLabel = widgets.label(form, text='Was ist Ihre Muttersprache?')
	motherTongueScale = widgets.rating_scale(form, nodes=['Deutsch', "Griechisch",
	        'Andere'], var='mother_tongue',orientation='vertical')
	
	homelandLabel = widgets.label(form, text='In welchem Land sind Sie aufgewachsen?')
	homelandScale = widgets.rating_scale(form, nodes=['Deutschland', "Griechenland",
	        'Andere'], var='homeland',orientation='vertical')
	
	nextButton = Button(text=u'Weiter')
	
	form.set_widget(textLabel, (0,0))
	
	form.set_widget(nationalityLabel, (0,1))
	form.set_widget(nationalityScale, (0,2))
	
	form.set_widget(motherTongueLabel, (0,3))
	form.set_widget(motherTongueScale, (0,4))
	
	form.set_widget(homelandLabel, (0,5))
	form.set_widget(homelandScale, (0,6))
	
	form.set_widget(nextButton, (0, 7))
	
	form._exec()
	__end__
	set _prepare ""

define inline_script input_form_greek
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = Form(
	    cols=[1], rows=[1,1,4,1,3,1,3,1],
	    margins=(5,10,5,10), spacing=5
	)
	textLabel = widgets.label(form, text='Παρακαλώ επιλέξτε τις κατάλληλες απαντήσεις.')
	
	nationalityLabel = widgets.label(form, text='Ποια υπηκοότητα έχετε;')
	nationalityScale = widgets.rating_scale(form, nodes=['Ελληνική', "Γερμανική",
	        'Άλλη', 'Περισσότερες απο μία'], var='user_nationality',orientation='vertical')
	
	motherTongueLabel = widgets.label(form, text='Ποιά είναι η μητρική σας γλώσσα;')
	motherTongueScale = widgets.rating_scale(form, nodes=['Ελληνικά', "Γερμανικά",
	        'Άλλη'], var='mother_tongue',orientation='vertical')
	
	homelandLabel = widgets.label(form, text='Σε ποιά χώρα μεγαλώσατε;')
	homelandScale = widgets.rating_scale(form, nodes=['Ελλάδα', "Γερμανία",
	        'Άλλη'], var='homeland',orientation='vertical')
	
	nextButton = Button(text=u'Συνέχεια')
	
	form.set_widget(textLabel, (0,0))
	
	form.set_widget(nationalityLabel, (0,1))
	form.set_widget(nationalityScale, (0,2))
	
	form.set_widget(motherTongueLabel, (0,3))
	form.set_widget(motherTongueScale, (0,4))
	
	form.set_widget(homelandLabel, (0,5))
	form.set_widget(homelandScale, (0,6))
	
	form.set_widget(nextButton, (0, 7))
	
	form._exec()
	__end__
	set _prepare ""

define form_text_display instructions_german
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Beginnen
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	Anweisungen
	
	Ihnen werden nacheinander ca. 80 Bilder von Sonnenuntergängen gezeight, welche Sie dann vorsichtig und aufmerksam auf einer Skala von 1 bis 10 bewerten sollen. Es gibt keinen Zeitdruck, also lassen Sie sich gerne Zeit zum überlegen. Das Bewertungskriterium lautet wie folgt:
	
	"Wie stark motiviert Sie das Bild dort hin zu reisen?"
	
	1 bedeutet überhaupt nicht, 10 bedeutet sehr motiviert.
	
	Klicken Sie "Beginnen" um mit dem Experiment zu beginnen.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display instructions_greek
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Εκκίνηση
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	Οδηγίες
	
	Θα σας εμφανιστούν περίπου 80 φωτογραφίες ηλιοβασιλεμάτων, τις οποίες θα πρέπει να βαθμολογίσετε από 1 μέχρι 10. Δεν υπάρχει πίεση χρόνου, οπότε μπορείτε να σκεφτείτε με την ησυχία σας. Το κριτήριο κατά το οποίο πρέπει να αξιολογίσετε είναι:
	
	"Πόσο σας παρακινεί η φωτογραφία να ταξιδέψετε σε αυτό το μέρος;"
	
	1 αντιστοιχεί σε "καθόλου απολύτως", 10 σε "πάρα πολύ".
	
	Πατήστε "Εκκίνιση" για να ξεκινήσει το πείραμα.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define logger logger
	set description "Logs experimental data"
	set auto_log yes

define form_multiple_choice mother_tongue_form_german
	set timeout infinite
	set spacing 10
	set question "Was ist ihre Muttersprache?"
	__options__
	Deutsch
	Griechisch
	Andere
	Mehrere
	__end__
	set margins "50;50;50;50"
	set form_var mother_tongue
	set form_title Muttersprache
	set description "A simple multiple choice item"
	set button_text Weiter
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_multiple_choice nationality_form_german
	set timeout infinite
	set spacing 10
	set question "Welche Nationalität haben Sie?"
	__options__
	Deutsch
	Griechisch
	Andere
	Mehrere
	__end__
	set margins "50;50;50;50"
	set form_var user_nationality
	set form_title Nationalität
	set description "A simple multiple choice item"
	set button_text Weiter
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define form_base new_form_base
	set timeout infinite
	set spacing 10
	set rows "2;2"
	set only_render no
	set margins "50;50;50;50"
	set description "A generic form plug-in"
	set cols "2;2"
	set _theme gray


define form_base new_form_base_1
	set timeout infinite
	set spacing 5
	set rows "1;1;1;1;1;1;1;1;1;1"
	set only_render no
	set margins "50;50;50;50"
	set description "A generic form plug-in"
	set cols "9;0.5;1"
	set _theme gray


define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"

define inline_javascript process_language_variables
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//Convert the language name to an english abbreviation for easier processing
	//Also assign the trial question accordingly
	
	if (vars.language === 'Deutsch'){
	    vars.language = 'de';
	    vars.trialQuestion = trialQuestion.de;
	} else if (vars.language === "Ελληνικά"){
	    vars.language = 'gr';
	    vars.goodbye = goodbye.gr;
	} else {
	    throw new Exception("Invalid language" + vars.language);
	}
	__end__
	___prepare__
	let trialQuestion = {
	    'de':"Wie stark motiviert Sie das Bild dort hin zu reisen?",
	    'gr':"Πόσο σας παρακινεί η φωτογραφία να ταξιδέψετε σε αυτό το μέρος;"
	    }
	
	let goodbye = {
	    'de': "Vielen Dank für Ihre Teilnahme am Experiment! Sie können nun das Fenster schließen.",
	    'gr':"Σας ευχαριστώ πολύ για την συμμετοχή στην πείραμα! Μπορείτε να κλείσετε τώρα αυτό το παράθυρο."
	}
	__end__

define inline_script process_language_variables_python
	set description "Executes Python code"
	___run__
	#Convert the language name to an english abbreviation for easier processing
	
	if var.language == 'Deutsch':
	    var.language = 'de'
	elif var.language == 'Ελληνικά':
	    var.language = 'gr'
	else:
	    raise Exception("Invalid language:",var.language)
	
	#Also assign the trial question accordingly
	var.trialQuestion = trialQuestion[var.language]
	var.goodbye = goodbye[var.language]
	__end__
	___prepare__
	trialQuestion = {
	    'de':u"Wie stark motiviert Sie das Bild dort hin zu reisen?",
	    'gr':u"Πόσο σας παρακινεί η φωτογραφία να ταξιδέψετε σε αυτό το μέρος;"
	    }
	
	goodbye = {
	    'de': u"Vielen Dank für Ihre Teilnahme am Experiment! Sie können nun das Fenster schließen.",
	    'gr':u"Σας ευχαριστώ πολύ για την συμμετοχή στην πείραμα! Μπορείτε να κλείσετε τώρα αυτό το παράθυρο."
	}
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_form_base_1 always
	run logger always

define form_text_display welcome_screen_german
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Weiter
	set margins "50;50;50;50"
	set form_title Wilkommen
	__form_text__
	Willkommen zu meinem Experiment.
	
	Dieses Experiment wurde von mir, Christian Wohlhaupt, für meine Bachelorarbeit erstellt.
	
	Es wird ca. 7-10 Minuten dauern. Auf der nächsten Seite werden Sie nach einigen Daten gefragt. Es ist wichtig, dass Sie nur an dieser Studie teilnehmen, wenn Ihre Staatsbürgerschaft entweder Deutsch oder Griechisch ist. Falls beides oder nichts davon zutrifft, bitte ich Sie das Experiment an dieser Stelle zu verlassen.
	
	Drücken Sie "Weiter" um mit der Datenerhebung zu beginnen.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display welcome_screen_greek
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Συνέχεια
	set margins "50;50;50;50"
	set form_title Welcome
	__form_text__
	Καλωσορίσατε στο πείραμά μου.
	
	Αυτό το πείραμα φτιάχτηκε απο εμένα, Κρίστιαν Βόλχαουπτ, για την πτυχιακή μου εργασία.
	
	Θα κρατήσει περίπου 7-10 λεπτά. Στην επόμενη σελίδα θα σας ζητηθούν κάποιες πληροφορίες. Για να μπορέσετε να λάβετε μέρος στο πείραμα, θα πρέπει να έχετε είτε την ελληνική, είτε τη γερμανική υπηκοότητα. Αν έχετε και τις δύο, ή καμία από αυτές, σας παρακαλώ να αποσυρθείτε σε αυτό το σημείο, κλείνοντας το παράθυρο του πειράματος.
	
	Πατήστε "Συνέχεια" για να προχωρήσετε στην επόμενη σελίδα.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


