PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = demographics
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Routines
  Routine demographics
    TextComponent loading
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading...
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    CodeComponent iframe
      Code Type = JS
      Begin JS Routine:
        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;

        let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: auto; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%"></iframe></div></div></div>');

            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
                $('#iframe-i').height ( Math.min ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['gender'] = psychoJS.experiment._currentTrialData['gender'];
        expInfo['gender_text'] = psychoJS.experiment._currentTrialData['gender_text'];
        expInfo['age'] = psychoJS.experiment._currentTrialData['age'];
        expInfo['student'] = psychoJS.experiment._currentTrialData['student'];
        expInfo['english'] = psychoJS.experiment._currentTrialData['english'];
  Routine end
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $'The following variables will be added to the data file from this point onwards:\n\ngender: '+expInfo['gender'] + '\ngender_text: '+expInfo['gender_text']+'\nage: ' + expInfo['age']+'\nstudent: ' + expInfo['student'] + '\nenglish: ' + expInfo['english']
      units = norm
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Flow
  Routine demographics
  Routine end
